PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Experiment_Memory
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Routines
  Routine Instr1
    TextComponent Instr1_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Дорогой участник исследования!
        Мы изучаем, как люди принимают решения в ситуации выбора из двух возможных вариантов.

        Сейчас вам будут показаны вопросы с двумя вариантами ответа. Вам будет нужно прочитать вопрос и выбрать сторону (слева или справа), на которой находится правильный ответ.

        Сначала на экране появится вопрос на 5 секунд. Затем он исчезнет и на 2 секунды появятся варианты ответа - один слева, один справа. После этого слова исчезнут, и вам нужно будет дать ответ, используя русские клавиши “А” (если правильный ответ слева) или “О” (если правильный ответ справа).

        Когда будете готовы приступить к заданиям, нажмите ПРОБЕЛ.
    KeyboardComponent Instr1_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr2
    TextComponent Instr2_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Первое задание будет тренировочным. Его результат не будет учитываться.
        Когда будете готовы, нажмите ПРОБЕЛ.
    KeyboardComponent Instr2_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ExQnA
    TextComponent ExQuestion
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Что рифмуется со словом "молодец"?
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    TextComponent ExWordL
      letterHeight = 0.07
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      text = конец
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    TextComponent ExWordR
      letterHeight = 0.07
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      text = пора
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    TextComponent ExHint
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 5.0
      text = Нажмите А, если СЛЕВА              Нажмите О, если СПРАВА
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    KeyboardComponent ExAns
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5.0
      store = nothing
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  Routine Instr3
    TextComponent Instr3_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Молодец! :) Сейчас начнется основная часть исследования, в нем будет 20 заданий.
        Когда будете готовы приступить, нажмите ПРОБЕЛ.
    KeyboardComponent Instr3_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine TestQnA
    TextComponent TestQuestion
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $question
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    TextComponent TestWordL
      color [set every repeat] = $wordcolorL
      letterHeight = 0.07
      pos = (-0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $wordL
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    TextComponent TestWordR
      color [set every repeat] = $wordcolorR
      letterHeight = 0.07
      pos = (0.2, 0)
      saveStartStop = False
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $wordR
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    TextComponent TestHint
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 5.0
      text = Нажмите А если СЛЕВА              Нажмите О если СПРАВА
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    KeyboardComponent TestKeyresp
      allowedKeys = 'f','j'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 5.0
      store = nothing
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  Routine Goodbye
    TextComponent Goodbye_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Спасибо за участие в исследовании!!
        Вы наконец-то свободны.
  Routine Recogn
    TextComponent Recogn_word
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $stimuluswords
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    TextComponent Recogn_hint
      letterHeight = 0.03
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Нажмите А если НЕ БЫЛО             Нажмите О если БЫЛО
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    KeyboardComponent Recogn_Ans
      allowedKeys = 'f','j'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Instr4
    TextComponent Instr4_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Далее Вам будут последовательно показаны слова. Ваша задача - отметить, какие из них встречались на предыдущем этапе исследования.

        Если слово ВСТРЕЧАЛОСЬ - нажмите "О".
        Если НЕ ВСТРЕЧАЛОСЬ - нажмите "А".

        Чтобы продолжить, нажмите ПРОБЕЛ.
    KeyboardComponent Instr4_keyresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instr5
    TextComponent Instr5_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = А теперь :) просим ответить вас на несколько вопросов.
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  Routine Question_Age
    TextComponent Q_Age
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Ваш возраст:
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    TextboxComponent Ans_Age
      bold = False
      editable = False
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent Q_Age_keyresp
      allowedKeys = 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Question_Sex
    TextComponent Q_Sex
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ваш пол:
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    TextboxComponent Ans_Sex
      bold = False
      editable = False
      letterHeight = 0.05
      saveStartStop = False
      size = (None, None)
      startVal [time (s)] = 0.0
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    KeyboardComponent Q_Sex_keyresp
      allowedKeys = 'enter'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine blank
    PolygonComponent blank_focus
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine Instr1
  Routine Instr2
  Routine ExQnA
  Routine Instr3
  LoopInitiator testing_trials loopType="TrialHandler"
    Selected rows = 1:20
    conditionsFile = conditions_memory_loop.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'question': 'Что является транспортным средством?', 'wordL': 'деньги', 'wordR': 'машина', 'wordcolorL': 'white', 'wordcolorR': 'white'},
      {'question': 'Какое слово относится к категории учебные предметы в школе?', 'wordL': 'право', 'wordR': 'образ', 'wordcolorL': 'white', 'wordcolorR': 'white'},
      {'question': 'Что относится ко времени?', 'wordL': 'уровень', 'wordR': 'минута', 'wordcolorL': 'white', 'wordcolorR': 'white'},
      {'question': 'Какое слово относится к категории предметы мебели?', 'wordL': 'диван', 'wordR': 'печать', 'wordcolorL': 'white', 'wordcolorR': 'white'},
      {'question': 'Какое слово относится к категории члены семьи?', 'wordL': 'звезда', 'wordR': 'сестра', 'wordcolorL': 'white', 'wordcolorR': 'white'},
      {'question': 'Какое из слов относится к географии?', 'wordL': 'страна', 'wordR': 'случай', 'wordcolorL': 'white', 'wordcolorR': 'white'},
      {'question': 'Чем рисуют картины?', 'wordL': 'транспорт', 'wordR': 'краска', 'wordcolorL': 'white', 'wordcolorR': 'white'},
      {'question': 'Какое слово относится к временам года?', 'wordL': 'зима', 'wordR': 'режим', 'wordcolorL': 'white', 'wordcolorR': 'white'},
      {'question': 'Какое слово относится к категории музыка?', 'wordL': 'море', 'wordR': 'песня', 'wordcolorL': 'white', 'wordcolorR': 'white'},
      {'question': 'Какое слово относится к категории фрукты?', 'wordL': 'яблоко ', 'wordR': 'лестница', 'wordcolorL': 'white', 'wordcolorR': 'white'}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
    Routine TestQnA
  LoopTerminator testing_trials
  Routine Instr4
  LoopInitiator trials_Recogn loopType="TrialHandler"
    conditionsFile = conditions_memory_recogn.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimuluswords': 'деньги', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'право', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'уровень', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'диван', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'звезда', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'страна', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'транспорт', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'зима', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'море', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'яблоко', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'статья', 'lvl': 'sens', 'corrAns': 'j'},
      {'stimuluswords': 'вода', 'lvl': 'sens', 'corrAns': 'j'},
      {'stimuluswords': 'тысяча', 'lvl': 'sens', 'corrAns': 'j'},
      {'stimuluswords': 'месяц', 'lvl': 'sens', 'corrAns': 'j'},
      {'stimuluswords': 'вечер', 'lvl': 'sens', 'corrAns': 'j'},
      {'stimuluswords': 'молоко', 'lvl': 'sens', 'corrAns': 'j'},
      {'stimuluswords': 'порядок', 'lvl': 'sens', 'corrAns': 'j'},
      {'stimuluswords': 'студент', 'lvl': 'sens', 'corrAns': 'j'},
      {'stimuluswords': 'масштаб', 'lvl': 'sens', 'corrAns': 'j'},
      {'stimuluswords': 'лошадь', 'lvl': 'sens', 'corrAns': 'j'},
      {'stimuluswords': 'машина', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'образ', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'минута', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'печать', 'lvl': 'semant', 'corrAns': 'j'},
      {'stimuluswords': 'сестра', 'lvl': 'semant', 'corrAns': 'j'}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
    Routine Recogn
  LoopTerminator trials_Recogn
  Routine Goodbye
